/* In this experiment we want to depolarize NMDA on an astrocyte modeled membrane
We will examine the depolarization after injection of current.
*/

// load_file("nrngui.hoc")
load_file("stdgui.hoc")
load_file("../src/neuronHoc/params.hoc")

//fully activates cache efficiency
cvode.cache_efficient(1)  

tstop = 1
dt = 0.1
celsius = 34	//room temperature in Clarke08 experiment = ?
//v_init = -85
v_init = -80

// ------------------ THE BRANCH
// create branch
// access branch

// L = 30
// diam = 1

// Ra = 100                // Ohm cm 
// cm = 0.8                // uF/cm2
// nseg = 10              // seg/5 um
// insert pas
// e_pas = -85             // mV 
// g_pas = 1/11150         // mS/cm2


// insert k_ion
// ko_k_ion=3
// ki_k_ion=110

// insert kdrglia         // delayed rectifier
// insert kpump           // kpump
// insert kir4            // K inward rectifier 4
// gkir_kir4=0

// insert kdifl           // k difusion lateral
// insert GluTrans


// // ------------------ THE PAP
// create PAP
// // connect PAP(0), branch(1)
// access PAP
xopen("../src/Geometry/GeometryAstrocyteCA1.hoc")

// ------------------ Astrcyte leaf membrane parms from CellInit.hoc


// Ra = 100                // Ohm cm 
// cm = 0.8                // uF/cm2
objref wFile
wFile = new File()   
wFile.ropen("../results/optimize/optDelta.dat")
DELTA = wFile.scanvar()
wFile.close()
// DELTA = 1e4
print(DELTA)
forall {
    insert pas
    e_pas = -80             // mV
    g_pas = 1 /  11150
    insert kir2
    insert clleak
    insert naleak
    insert kleak
    insert twik
    insert k_acc
    insert na_acc
    gleak_clleak = gleak_clleak * DELTA
    gleak_naleak= gleak_naleak * DELTA
}
// g_pas = 1/11150         // mS/cm2


// insert k_ion
// ko_k_ion=3
// ki_k_ion=110

// insert kdrglia         // delayed rectifier
// insert kpump           // kpump
// insert kir4            // K inward rectifier 4
// gkir_kir4=0

// insert kdifl           // k difusion lateral
// insert GluTrans

proc initIon(){local iki,inai
    iki = 80 //ek set to -92
    inai = 15 // Verhratsky A 2019 review
    ki0_k_ion = iki
    nai0_na_ion = inai
    
    
    // set initial Ko Ki
    forall {
        nao = 140
        ko = 2.5
        clo = nao + ko
        ki = iki
        nai = inai
    }
}
objref FinIon
FinIon = new FInitializeHandler(3,"initIon()")
psection()


objref ic, vc, vRec, tRec, vFile, tFile
double unit[1]

proc clampSwitch () {
    //------------Voltage Clamp---------------------------	
    if ($1 > 1) {
        vRec = new Vector(570)
        tRec = new Vector(570)
        vFile = new File()
        tFile = new File()
        
        vFile.ropen("./Data/Exp10-Clarke08-Fig10/vNaSpike.dat")
        tFile.ropen("./Data/Exp10-Clarke08-Fig10/tNaSpike.dat")
        
        vc = new VClamp(.5)
        vc.dur[0] = tstop
        
        vRec.scanf(vFile)
        tRec.scanf(tFile)
        vRec.play(&vc.amp[0],tRec)    
        // vRec.printf()
    } else if ($1 > 0) {
        vc = new VClamp(.5)
        vc.dur[0] = tstop   // ms half of tstop
        // vc.amp[0] = -65 // mV depolarization (dV = 20)
        vc.amp[0] = -60
    } else {
        //------------Current Clamp---------------------------	
        ic = new IClamp(.5)
        // ic.del = tstop / 2 // ms delay half of tstop
        ic.dur = 2*dt //ms half of tstop
        ic.del = 10 - ic.dur // ms starts with glutamate 
        unit =  0.001 // pA
        ic.amp = 1.5 * unit // nA current injection (1 pA)
        //---------------------------------------------------
    }
}
// clampSwitch(1) //use different mode

objref wFile
// wFile = new File()   
// wFile.ropen("./results/optimize/optT1.dat")
// Tau1 = wFile.scanvar()
// Wtau2 = wFile.scanvar()
// wFile.close()

// wFile = new File()   
// wFile.ropen("../results/optimize/optT2.dat")
// Tau2_0 = wFile.scanvar()
// A2 = wFile.scanvar()
// B2 = wFile.scanvar()
// wFile.close()

// wFile = new File()   
// wFile.ropen("../results/optimize/optT3.dat")
// Tau3_0 = wFile.scanvar()
// A3 = wFile.scanvar()
// B3 = wFile.scanvar()
// wFile.close()

// Tau1 = 1.69
// Wtau2 = 0.65

// Tau2_0 = 33.129
// A2 = 2.9907
// B2 = 0.0243
// Tau3_0 = 217.69
// A3 = 34.69
// B3 = 0.01

//k0 = 6.9172
// wFile = new File()   
// wFile.ropen("../results/optimize/optDelta.dat")
// DELTA = wFile.scanvar()
// wFile.close()
// DELTA = 0.99128


objref sNMDA, stim, nc
stim = new NetStim(.5)
	stim.interval = 1		//ms (mean) time between spikes
	stim.number = 1			//(average) number of spikes
	// stim.start 	= 1.534 - 1	//ms (most likely) start time of first spike
        stim.start = 10
	stim.noise 	= 0			//---- range 0 to 1. Fractional randomness.
//	0 deterministic, 1 intervals have negexp distribution.
//        Artificial Stimulus to PAP (compatible with astrocyte?)

{sNMDA = new Exp5NMDA(.5) } // Our Model 2012 Synaptic Conductance 
// {sNMDA = new Exp5NMDA4(.5) SynWeight = 0.57262 } // Our Model - modifed to have voltage dependent gFAST, 2012
// sNMDA = new Exp5NMDA(.5)


nc = new NetCon(stim, sNMDA)

proc init_NMDA() {
	nc.weight = $1
	// nc.delay = 1
	nc.delay = 0
        
	// sNMDA.tau1 = Tau1        
        // sNMDA.tau2_0 = Tau2_0
	// sNMDA.a2 = A2
	// sNMDA.b2 = B2
	// // sNMDA.wtau2 = Wtau2
	// sNMDA.tau3_0 = Tau3_0
	// sNMDA.a3 = A3
	// sNMDA.b3 = B3
//	sNMDA.K0 = k0
//	sNMDA.delta = DELTA
    }
    objref FinNMDA
    
// wFile = new File()   
// wFile.ropen("../results/optimize/optW.dat")
// SynWeight = wFile.scanvar()
// wFile.close()

// synweight = 0.57262
 SynWeight = 0
print(SynWeight)
FinNMDA = new FInitializeHandler(3,"init_NMDA(SynWeight)")
	
//-------Graph----------------------	
objref iNMDA, vSoma
iNMDA = new Graph()
iNMDA.size(0,tstop,-10,5)
iNMDA.addvar("sNMDA.i",3,0)
iNMDA.save_name("graphList[0].")
graphList[0].append(iNMDA)

// vsoma = new Graph()
// vSoma.size(0,tstop,-100,100)
// vSoma.addvar("PAP.v(.5)",3,0)
// vSoma.save_name("graphList[0].")
// graphList[0].append(vSoma)

//------Save Simulated NMDA Current
objref iNMDA, iFile, iMem, iFileMem, time, tFile, vSoma, vFile
iNMDA = new Vector()
iNMDA.record(&sNMDA.i)
iFile = new File("iFile.dat")
iFile.wopen("iFile.dat")



iMem = new Vector()
iMem.record(&PAP.i_pas(0.5))
iFileMem = new File("iFileMem.dat")
iFileMem.wopen("iFileMem.dat")

vSoma = new Vector()
vSoma.record(&soma.v(0.5))
vFile = new File("vFile.dat")
vFile.wopen("vFile.dat")


time = new Vector()
time.record(&t)
tFile = new File("tFile.dat")
tFile.wopen("tFile.dat")

init()
run()

iNMDA.printf(iFile)
iFile.close()

iMem.printf(iFileMem)
iFileMem.close()


vSoma.printf(vFile)
vFile.close()

time.printf(tFile)
tFile.close()

// objref g
// g = new Graph()
// g.size(0,tstop,-0.01,0)
// iNMDA.plot(g,time)
// graphList[0].append(iNMDA)
// g.printfile("plot.psf")
